config:
  title: Primer Workflow
  description: A workflow to order primers
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Tileli Amimeur, affiliation: University of Washington}, {name: Nick Bolten, affiliation: University of Washington}, {name: Leandra Brettner, affiliation: University of Washington}, {name: Cameron Cordray, affiliation: University of Washington}, {name: Miles Gander, affiliation: University of Washington}, {name: Samer Halabiya, affiliation: University of Washington}, {name: Seunghee Jang, affiliation: University of Washington}, {name: Yokesh Jayakumar, affiliation: University of Washington}, {name: Benjamin Keller, affiliation: University of Washington}, {name: Erriberto Lopez, affiliation: University of Washington}, {name: Jon Luntzel, affiliation: University of Washington}, {name: Abraham Miller, affiliation: University of Washington}, {name: Garrett Newman, affiliation: University of Washington}, {name: Michelle Parks, affiliation: University of Washington}, {name: Sundipta Rao, affiliation: University of Washington}, {name: Ayesha Saleem, affiliation: University of Washington}, {name: Devin Strickland, affiliation: University of Washington}, {name: Chris Takahashi, affiliation: University of Washington}, {name: Yaoyu Yang, affiliation: University of Washington}, {name: David Younger, affiliation: University of Washington}]
  maintainer: {name: Ben Keller, email: bjkeller@uw.edu}
  github: {user: bjkeller, repo: primer-workflow, organization: klavinslab}
  aquadoc_version: 1.0.0
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
sample_types:
  - {name: Primer, description: A short double stranded piece of DNA for PCR and sequencing}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
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object_types:
  - {name: Primer Stock, description: rehydrated primer in tube, handler: sample_container, unit: Primer, release_method: return, prefix: M20, sample_type_name: Primer}
  - {name: Primer Aliquot, description: Primers at low concentration (10uM) for every day use, handler: sample_container, data: { "measure": { "type": "concentration", "unit": "micromolar" } }, unit: Primer, release_method: return, prefix: M20, sample_type_name: Primer}
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operation_type: Make Primer Aliquot
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Stock, sample_types: [Primer], object_types: [Primer Stock], routing: P}
  - {ftype: sample, role: output, name: Aliquot, sample_types: [Primer], object_types: [Primer Aliquot], routing: P}
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documentation:
name: Make Primer Aliquot
---

category: Cloning
---

This protocol uses an existing Primer stock in inventory to make a 1:10 diluted 100L aliquot of that primer.


## Arguments

- `Stock` &mdash; input primer stock

## Parameters

_None_

## Output

- `Aliquot` &mdash; the output 1:10 diluted primer aliquot.

## Shared (Blackboard) attributes

_None_

## Data associations

_None_

### Item associations

_None_

### Operation associations

_None_

### Plan associations

_None_

## Equipment

_None_

## Supplies

_None_

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cost_model:
def cost(op)
  { labor: 0.40, materials: 0.06 }
end

protocol:
# frozen_string_literal: true

# Make Primer Aliquot protocol.
#
# For each input primer stock, transfers 10 uL of stock into 90 uL of water in
# a 1.5 mL tube.
class Protocol
  def main
    operations.retrieve.make

    gather_tubes(
      count: operations.length,
      aliquot_ids: operations.map { |op| op.output('Aliquot').item.id }
    )
    create_aliquots(operations)

    operations.store
  end

  # Gather and prepare tubes for new aliquots.
  #
  # @param count [FixNum] the number of tubes to prepare
  # @param aliquot_ids [Array<FixNum>] the item IDs to label tubes
  def gather_tubes(count:, aliquot_ids:)
    show do
      title 'Prepare aliquot tubes'

      note "Grab #{count} 1.5 mL tubes"
      note "Label each tube with the following ids: #{aliquot_ids.to_sentence}"
      note 'Using the 100 uL pipette, pipette 90uL of water into each tube'
    end
  end

  # Displays instructions to transfer 10 uL of primer stock into the tube with
  # the corresponding label.
  #
  # @param operations [OperationList] the operations specifying transfer
  def create_aliquots(operations)
    show do
      title 'Transfer primer stock into primer aliquot'

      note 'Pipette 10 uL of the primer stock into a tube according to the following table:'
      table operations
        .start_table
        .input_item('Stock')
        .output_item('Aliquot', checkable: true)
        .end_table
    end
  end
end

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object_types:
  - {name: Lyophilized Primer, description: Some barely visible white powder, handler: sample_container, unit: tube, release_method: return, sample_type_name: Primer}
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operation_type: Order Primer
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 960, stop: 990, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: output, name: Primer, sample_types: [Primer], object_types: [Lyophilized Primer], routing: P}
  - {ftype: string, role: input, name: Urgent?}
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documentation:
# OrderPrimer

Displays instructions to order DNA oligos for the specified output primer from a vendor.

Indicate whether the order is urgent using the `Urgent?` parameter.

Currently supported vendors are IDT and Sigma-Aldrich.
Use the **Parameters** menu to set the user and password for the vendor(s) you want to be able to use.
Set values for `IDT User` and `IDT Password` for IDT; and `Sigma-Aldrich User` and `Sigma-Aldrich Password` for Sigma-Aldrich.

See the `Cloning/Vendor` library to add a vendor.

precondition:
def precondition(op)
  return true
  
  pending_orders = Operation.where("status = ? && operation_type_id IN (?)", "pending", OperationType.where("name = 'Order Primer'").map { |order| order.id })
  total_cost = pending_orders.inject(0) { |sum, order| sum + order.nominal_cost[:materials] }
  
  if (op.input("Urgent?").val.downcase == "yes" ||
     pending_orders.any? { |order| order.input("Urgent?").val.downcase == "yes" } ||
     total_cost > 50 ) && op.output("Primer").sample.properties["Overhang Sequence"] && op.output("Primer").sample.properties["Anneal Sequence"]
      return true
  end
  
  return false
end

cost_model:
# Kilroy was here 2017-09-22 18:54:13
def cost(op)
    
  props = op.output("Primer").sample.properties
  seq = props["Overhang Sequence"] + props["Anneal Sequence"]
  n = seq.length
  
  if n <= 60
    c = n * Parameter.get_float('short primer cost')
  elsif n <= 90
    c = n * Parameter.get_float('medium primer cost')
  else
    c = n * Parameter.get_float('long primer cost')
  end
  
  { labor: 1.8, materials: c }
  
end

protocol:
# frozen_string_literal: true

needs 'Standard Libs/Feedback'
needs 'Cloning/PrimerModel'
needs 'Cloning/Vendor'

class Protocol
  include Feedback
  include PrimerModel

  def main
    operations.retrieve.make

    vendor = Vendor.determine_vendor
    vendor.login

    primers = operations.map { |op| create_primer(output: op.output('Primer')) }
    order_number = vendor.order_primers(primers)
    add_order_number(operations: operations, order_number: order_number)

    get_protocol_feedback
    {}
  end

  def create_primer(output:)
    Primer.new(sample: output.sample)
  end

  def add_order_number(operations:, order_number:)
    unless order_number.nil?
      operations.each do |op|
        op.set_output_data('Primer', :order_number, order_number)
      end
    end
  end
end

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operation_type: Rehydrate Primer
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 690, stop: 870, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Primer, sample_types: [Primer], object_types: [Lyophilized Primer], routing: P}
  - {ftype: sample, role: output, name: Primer Aliquot, sample_types: [Primer], object_types: [Primer Aliquot], routing: P}
  - {ftype: sample, role: output, name: Primer Stock, sample_types: [Primer], object_types: [Primer Stock], routing: P}
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documentation:
# Rehydrate Primer

Takes a primer and hydrates it, yielding a primer aliquot and a primer stock.

This protocol assumes that all primers in the job are from the same order.
In practice, the BIOFAB ensures this by telling IDT to only send an order once
all primers are complete.
This allows the lab managers to identify and schedule the appropriate job.

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cost_model:
def cost(op)
  { labor: 3.16, materials: 0.12 }
end

protocol:
# frozen_string_literal: true

needs 'Standard Libs/Feedback'
needs 'Cloning/PrimerModel'

# Rehydrate Primers protocol.
# Takes a primer and hydrates it yielding a primer aliquot and stock.
#
# Note: this protocol assumes details about vendor labeling that may be
# IDT-specific.
#
class Protocol
  include Feedback
  include PrimerModel

  def main
    operations.retrieve interactive: false
    operations.make

    spin_down_primers(operations)
    get_primer_nm(operations)

    rehydrate_primers(operations)
    aliquot_ids = operations.map do |op|
      op.output('Primer Aliquot').item.id
    end
    prepare_aliquot_tubes(tube_ids: aliquot_ids)
    vortex_and_centrifuge(count: operations.length)
    make_aliquots(operations)

    operations.each { |op| op.input('Primer').item.mark_as_deleted }
    operations.store

    get_protocol_feedback
    {}
  end

  # Display instructions to spin down the primers
  #
  # @param primers [Array<Item>] the input primers
  def spin_down_primers(_primers)
    show do
      title 'Quick spin down all the primer tubes'
      note 'Put all the primer tubes in a table top centrifuge to spin down for 3 seconds.'
      warning 'Make sure to balance!'
    end
  end

  # Displays the primers and for each asks for the nMoles of primer on the tube
  # label. Stores the measurement in `operation.temporary[:n_moles]`
  def get_primer_nm(operations)
    show do
      title 'Enter the nMoles of the primer'

      note 'Enter the number of moles for each primer, in nM. This is written toward the bottom of the tube, below the MW.'
      note "The ID of the primer is listed before the primer's name on the side of the tube."
      table operations
        .start_table
        .input_sample('Primer')
        .get(:n_moles, type: 'number', heading: 'nMoles', default: 10)
        .end_table
    end
  end

  # Displays instructions to label the primer tubes with a new ID, and then add
  # TE to rehydrate the primer.  Adds 10uL for each nM.
  #
  # @param operations [OperationList] the operations with input primers
  def rehydrate_primers(operations)
    show do
      title 'Label and rehydrate'

      note 'Label each primer tube with the IDs shown in Primer Stock IDs and rehydrate with volume of TE shown in Rehydrate'
      table operations
        .start_table
        .input_sample('Primer')
        .output_item('Primer Stock')
        .custom_column(heading: 'Rehydrate (uL of TE)', checkable: true) { |op| op.temporary[:n_moles] * 10 }
        .end_table
    end
  end

  # Displays instructions to vortex and centrifuge the rehydrated primers.
  #
  # @param count [Fixnum] the number of primers
  def vortex_and_centrifuge(count:)
    show do
      title 'Vortex and centrifuge'
      note 'Wait one minute for the primer to dissolve in TE.' if count < 7
      note 'Vortex each tube on table-top vortexer for 5 seconds and then quick spin for 2 seconds on table top centrifuge.'
    end
  end

  # Displays instructions to prepare the aliquot tubes by labeling and adding
  # 90uL of water to each.
  #
  # @param tube_ids [Array<Fixnum>] the list of item IDs
  def prepare_aliquot_tubes(tube_ids:)
    count = tube_ids.length
    id_string = tube_ids.map(&:to_s).join(', ')
    show do
      title 'Prepare 1.5 mL tubes'

      note 'While the primer dissolves in the TE, prepare tubes for each aliquot'
      check "Grab #{count} 1.5 mL tubes, label with following ids: #{id_string}"
      check 'Add 90 uL of water into each above tube.'
    end
  end

  # Displays instructions to transfer 10uL of the primer stock. into each output tube.
  #
  # @param operations [OperationList] the operations with output primers
  def make_aliquots(operations)
    show do
      title 'Make primer aliquots'

      note 'Add 10 uL from each primer stock into each primer aliquot tube using the following table.'

      table operations
        .start_table
        .output_item('Primer Stock', heading: 'Primer Stock (10 uL)')
        .output_item('Primer Aliquot', checkable: true)
        .end_table
      note 'Vortex each tube after the primer has been added.'
    end
  end
end

library: {name: PrimerModel, category: Cloning}
code_source:
# frozen_string_literal: true

# Defines the Primer class with methods to manage the properties of primers,
# such as sequence, length, priming site, etc.
module PrimerModel
  # Represents a primer object for use in protocols.
  # Wraps an `Item` with sample type 'Primer'.
  #
  class Primer
    THIS_SAMPLE_TYPE = 'Primer'
    OVERHANG_SEQUENCE = 'Overhang Sequence'
    ANNEAL_SEQUENCE = 'Anneal Sequence'
    T_ANNEAL = 'T Anneal'
    private_constant(
      :THIS_SAMPLE_TYPE, :OVERHANG_SEQUENCE, :ANNEAL_SEQUENCE, :T_ANNEAL
    )

    attr_accessor :item, :sample, :properties

    # Instantiates a new Primer.
    #
    # @param sample [Sample] Sample of SampleType 'Primer'
    # @return [Primer]  an object for the given sample
    # @raise [WrongSampleTypeError] if the sample type is not 'Primer'
    def initialize(sample:)
      @sample = sample

      unless Primer.is_primer?(sample)
        msg = "Sample #{sample.id}, #{sample.sample_type.name}, is not a #{THIS_SAMPLE_TYPE}."
        raise WrongSampleTypeError, msg
      end

      @properties = sample.properties
      @item = nil
    end

    # Creates a Primer from the given item.
    #
    # @param item [Item] an Item with 'Primer' sample type
    def self.from_item(item)
      op = Primer.new(sample: item.sample)
      op.set_item(item)
      op
    end

    # Associates an item with this `Primer` object
    #
    # @param item [Item] the item to associate to this object
    # @raise [WrongSampleTypeError] if the item sample type is not 'Primer'
    def set_item(item)
      unless Primer.is_primer?(item.sample)
        msg = "Expected item with sample type #{THIS_SAMPLE_TYPE}. " \
              "Got item #{item.id} with sample type #{item.sample.sample_type}"
        raise WrongSampleTypeError, msg
      end

      self.item = item
    end

    # Indicate whether a Sample is an Primer
    #
    # @param sample [Sample] the sample
    # @return [Boolean] true if the sample is a primer, false otherwise
    def self.is_primer?(sample)
      sample && sample.sample_type.name == THIS_SAMPLE_TYPE
    end

    # Return the overhang sequence for this Primer
    #
    # @return [String] the overhang sequence for this Primer
    def overhang_sequence
      properties.fetch(OVERHANG_SEQUENCE).strip
    end

    # Return the anneal sequence for this Primer
    #
    # @return [String] the anneal sequence for this Primer
    def anneal_sequence
      properties.fetch(ANNEAL_SEQUENCE).strip
    end

    # Return the sequence for this Primer determined as the composition of the
    # overhang and anneal sequences.
    #
    # @return the composition of the overhang and anneal sequences of this Primer
    def sequence
      overhang_sequence + anneal_sequence
    end

    # Return the length of the sequence of this Primer.
    #
    # @return the length of the sequence of this Primer
    def length
      sequence.length
    end

    # Return the annealing temperature of this Primer.
    #
    # @return the annealing temperature
    def t_anneal
      properties.fetch(T_ANNEAL)
    end

    # Computes the priming site for this Primer.
    #
    # @return [String] the substring for the priming site
    def detect_priming_site(template:, min_length: 16, require_perfect: 3, allow_mismatch: 1)
      query = last_n(require_perfect)
      matches = scan(template, query)
      matches.delete_if { |m| m.offset(0)[1] < min_length }
      return if matches.blank?

      i = 0
      loop do
        break if matches.length <= 1
        i += 1
        query = last_n(require_perfect + i)
        matches.keep_if { |m| expand_match(template, m, i) =~ /#{query}/i }
      end

      _, stop = matches[0].offset(0)
      return unless template[0..stop] =~ /#{last_n(stop)}/i
      [0, stop]
    end

    # Return the last n bases of the primer sequence.
    #
    # @return [String] the last n bases of the primer sequence
    def last_n(n)
      sequence[-n..-1]
    end

    def scan(template, pat)
      template.to_enum(:scan, /#{pat}/i).map { Regexp.last_match }
    end

    def expand_match(template, match, i)
      start, stop = match.offset(0)
      template[start - i..stop]
    end
  end
end

library: {name: Vendor, category: Cloning}
code_source:
# frozen_string_literal: true

# Module to manage details of ordering primers from a vendor using the `Cloning/Order Primer` protocol.
#
# Each vendor corresponds to a sub-module of the Vendor module implementing a
# method `order_primer(Primer)`, where `Primer` is defined in the library `Cloning/PrimerModel`
#
module Vendor
  # This is a hack to allow the methods of this module to create show blocks
  class Wrapper
    include Krill::Base
  end
  private_constant :Wrapper

  # Returns the vendor specified by the user
  # TODO: allow for user to specify which vendors they use with Parameters
  def self.determine_vendor
    vendors = %w[IDT Sigma-Aldrich]
    #vendors = vendors.reject { |v| Parameter.get("#{v} User").blank? }

    vendor_show_hash = Wrapper.new.show do
      select vendors, var: 'vendor', label: 'Select the vendor you will be ordering primers from', default: 0
    end

    if vendor_show_hash.value?('IDT')
      IDT
    elsif vendor_show_hash.value?('Sigma-Aldrich')
      SigmaAldrich
    end
  end

  # Defines common methods for primer vendors.
  #
  # Each vendor should have a module that includes this one.
  module PrimerVendor
    # will need to store information for each vendor

    # Displays login instructions for the vendor's website.
    def login_helper(url:, name:)
      user = Parameter.get("#{name} User")
      password = Parameter.get("#{name} Password")
      Wrapper.new.show do
        title 'Prepare to order primer'

        check "Go to the <a href='#{url}'>#{name} website</a>, log in with the account (Username: #{user}, password is #{password})."
        warning 'Ensure that you are logged in to this exact username and password!'
      end
    end

    # creates a primer table for copy-pasting
    def build_primer_table(primers:)
      primers.map do |primer|
        primer_table_entry(sample: primer.sample, sequence: primer.sequence)
      end
    end
  end

  # stores IDT information
  module IDT
    extend PrimerVendor

    LOWER_LENGTH = 60
    UPPER_LENGTH = 90

    def self.login
      login_helper(
        url: 'https://www.idtdna.com/site/account',
        name: 'IDT'
      )
    end

    def self.primer_table_entry(sample:, sequence:)
      [sample.id.to_s + ' ' + sample.name, sequence]
    end

    # Create strings containing identity of primers based on length
    def self.build_primer_lists(primers)
      short_primers = []
      long_primers = []

      primers.each_index do |index|
        primer = primers[index]
        primer_string = "#{primer} (##{index + 1})"
        if primer.length > LOWER_LENGTH && primer.length <= UPPER_LENGTH
          short_primers.push(primer_string)
        elsif primer.length > UPPER_LENGTH
          long_primers.push(primer_string)
        end
      end

      [short_primers.join(', '), long_primers.join(', ')]
    end

    # shows the primer table that was created in an earlier call and sets the output data.
    def self.display_primer_table(primer_tab, short_primers, long_primers)
      data = Wrapper.new.show do
        title 'Create an IDT DNA oligos order'

        warning "Oligo concentration for primer(s) #{short_primers} will have to be set to \"100 nmole DNA oligo.\"" if short_primers != ''
        warning "Oligo concentration for primer(s) #{long_primers} will have to be set to \"250 nmole DNA oligo.\"" if long_primers != ''

        check 'Under "Custom DNA Oligos", click "DNA Oligos", then click "Order now", and click "Bulk input". Copy and paste the following table there. '
        table primer_tab

        check "Click Add to Order, review the shopping cart to double check that you entered correctly. There should be #{operations.length} primers in the cart."
        check 'Click Checkout, then click Continue.'
        check 'Enter the payment information, click the oligo card tab, select the Card1 in Choose Payment and then click Submit Order.'
        check 'Go back to the main page, let it sit for 5-10 minutes, return and refresh, and find the order number for the order you just placed.'

        get 'text', var: 'order_number', label: 'Enter the IDT order number below', default: 100
      end

      data[:order_number]
    end

    def self.order_primers(primers)
      primer_table = build_primer_table(primers: primers)
      short_primers, long_primers = build_primer_lists(primers)
      order_number = display_primer_table(primer_table, short_primers, long_primers)

      order_number
    end
  end

  # stores Sigma-Aldrich information
  module SigmaAldrich
    extend PrimerVendor

    def self.login
      login_helper(
        url: 'https://www.sigmaaldrich.com/webapp/wcs/stores/servlet/LogonForm?storeId=11001',
        name: 'Sigma-Aldrich'
      )
    end

    def self.primer_table_entry(sample:, sequence:)
      [sample.id.to_s + ' ' + sample.name + "\t" + "None\t" + sequence + "\tNone\t" + "0.025\t" + "Desalt\t" + "Dry\t" + "None\t" + '1']
    end

    # shows the primer table for if the vendor is Sigma-Aldrich
    def self.show_primer_table(primer_table)
      Wrapper.new.show do
        title 'Create a Sigma-Aldrich DNA oligos order'

        check 'Under "Products", click "Custom DNA Oligos", and then under "Standard DNA Oligos", click "Order" under "Tubes".'
        check 'Click "Upload or Copy & Paste".'
        check 'Copy and paste the following table and click submit.'

        table primer_table

        check 'Click Add to Cart.'
        check 'Proceed to Check Out.'
        check 'Click Check Out and confirm the order.'
      end
      # TODO: how is order number handled here?
    end

    def self.order_primers(primers)
      primer_table = build_primer_table(primers: primers)
      order_number = show_primer_table(primer_table)

      order_number
    end
  end
end

library: {name: Feedback, category: Standard Libs}
code_source:
module Feedback
  CONTAINER_NAME = "Feedback (Virtual)"
  SAMPLE_TYPE_NAME = "Operation Feedback"
  
  # This method will prompt the technician to write feedback for the operations
  # that they complete on each job. This feedback will be associated to an item
  # that represents each operation type.
  def get_protocol_feedback
    
    # Gets feedback from the user
    if debug
      feedback = "testing for job id"
    else
      feedback = ask_for_feedback
    end
    
    if(!feedback.blank?)
      associate_feedback feedback
    end
    
    if debug
      print_association
    end
    
  end
  
  # Associates the feedback entered by the lab technician to the OperationType of the protocol
  # that uses this library.
  #
  # @param [String] the feedback entered by the lab technician.
  def associate_feedback feedback
    operation = OperationType.find(operation_type.id)
    feedback = feedback + "- job #{jid}"
  
    feedback_array = []
    if(!operation.get(:feedback).nil?)
      feedback_array = operation.get(:feedback)
    end
    feedback_array.push(feedback)
    operation.associate :feedback, feedback_array
  end
  
  # Debugging method that prints all associations
  def print_association
    operation = OperationType.find(operation_type.id)
    feedback_array = operation.get(:feedback)
    if feedback_array
      show do
        title "This is printing because debug is on"
        note "#{feedback_array}"
      end
    end
  end
  
  # Returns the feedback entered by a lab technician.
  #
  # @return [Hash] the information returned by the feedback show block
  def ask_for_feedback
    feedback = show do
      title "We want your feedback"
      
      note "Notice anything weird with this protocol? Tell us below!"
      
      get "text", var: "feedback_user", label: "Enter your feedback here", default: ""
    end
    feedback[:feedback_user] # return
  end

end

library: {name: Units, category: Standard Libs}
code_source:
module Units
    
    # Volume
    MICROLITERS = 'l'
    MILLILITERS = 'ml'
    
    # Weight
    NANOGRAMS = 'ng'
    
    # Concentration
    PICOMOLAR = 'pM'
    NANOMOLAR = 'nM'
    MICROMOLAR = 'M'
    MILLIMOLAR = 'mM'
    MOLAR = 'M'
    
    # Temperature
    DEGREES_C = 'C'
    
    # Time
    MINUTES = 'min'
    SECONDS = 'sec'
    HOURS ='hr'
    # Force
    TIMES_G = 'x g'
    
    # R/DNA Length
    BASEPAIRS = 'bp'
    KILOBASEPAIRS = 'kbp'
    MEGABASEPAIRS = 'mbp'
    GIGABASEPAIRS = 'gbp'
    
    # Voltage
    VOLTS = 'V'

    def self.qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def add_qty_display(options)
        new_items = {}
        
        options.each do |key, value|
            key =~ /^(.+_)+([a-z]+)$/
            
            case $2
            when 'microliters'
                units = MICROLITERS
            when 'milliliters'
                units = MILLILITERS
            when 'minutes'
                units = MINUTES
            else
                next
            end
            
            qty = value.to_f
            
            new_items["#{$1}qty".to_sym] = { qty: qty, units: units }
        end
        
        options.update(new_items)
    end
    
    # Return the unit constant for the the unit name if there is one.
    #
    # @param unit_name [String] the name of the unit
    # @returns the value of the constant with the given name
    # @raises BadUnitNameError if the name is not the name of a defined unit
    def self.get_unit(unit_name:)
        self.const_get(unit_name.upcase)
      rescue
        raise BadUnitNameError.new(name: unit_name)
    end
    
    # Exception class for bad unit name arguments to Units::get_unit.
    #
    # @attr_reader [String] name  the bad unit name
    class BadUnitNameError < StandardError
        attr_reader :name
        
        def initialize(msg: "Unknown unit name", name:)
            @name = name
            super(msg)
        end
    end
    
    # Return a key for the measure hash defined on the given object type.
    #
    # The measure hash must be defined in the data proerty of the object type as JSON.
    # For instance
    #
    #   { "measure": { "type": "concentration", "unit": "micromolar" } }
    #
    # The key is constructed as the type name, an underscore, and the unit name.
    #
    # @param object_type [ObjectType] the object type
    # @returns the key for the measure of the the object type if there is one
    # @raises MissingObjectTypeMeasure if the object type has no measure data_object
    def self.get_measure_key(object_type:)
        data_object = object_type.data_object
        raise MissingObjectTypeMeasureError.new(name: object_type.name) if !data_object.key?(:measure)
        
        measure = object_type.data_object[:measure]
        type_name = measure[:type]
        unit_name = measure[:unit]
        "#{type_name}_#{self.get_unit(unit_name: unit_name)}"
    end
    
    # Exception class for an object type with out a measure hash definition.
    #
    # @attr_reader [String] name  the name of the object type where measure has was expected
    class MissingObjectTypeMeasureError < StandardError
        attr_reader :name
        
        def initialize(msg: "ObjectType has no measure in data object", name:)
            @name = name
            super(msg)
        end
    end
   
end
